CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:18
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|D:\\\\Projects\\\\Cytomining hackaton
    Name of the file:testPlaceWeek1.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate_DAPI
    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclear_Debris
    Typical diameter of objects, in pixel units (Min,Max):90,99999
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MeasureObjectIntensity:[module_num:3|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notes:['']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
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:Nuclear_Debris

MaskImage:[module_num:4|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
    Select the input image:DAPI
    Name the output image:MaskedNuclearImage
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclear_Debris
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:MaskedNuclearImage
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,65
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:7|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
    Name the output objects:Valid_Nuclei
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Valid_Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:MaskedNuclearImage
    Number of pixels by which to expand the primary objects:10
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureImageIntensity:[module_num:9|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
    Select the image to measure:Actin
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Cells
    Select the image to measure:Tubulin
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Cells

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Actin
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells_Tubuline
    Select the method to identify the secondary objects:Propagation
    Select the input image:Tubulin
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    Regularization factor:0.02
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:Cells_Actin
    Select objects to measure:Cells_Tubuline
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:13|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
    Hidden:2
    Select an image to measure:Actin
    Select an image to measure:Tubulin
    Select objects to measure:Cells
    Select objects to measure:Cells_Actin
    Select objects to measure:Cells_Tubuline

MeasureImageIntensity:[module_num:14|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
    Select the image to measure:MaskedNuclearImage
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:Actin
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:Tubulin
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageAreaOccupied:[module_num:15|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells_Actin
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells_Tubuline
    Retain a binary image of the object regions?:No
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
MeasureTexture:[module_num:16|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
    Hidden:2
    Hidden:2
    Hidden:1
    Select an image to measure:Actin
    Select an image to measure:Tubulin
    Select objects to measure:Cells_Actin
    Select objects to measure:Cells_Tubuline
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

MeasureGranularity:[module_num:17|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
    Image count:2
    Object count:1
    Select an image to measure:Actin
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells_Actin
    Object count:1
    Select an image to measure:Tubulin
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells_Tubuline

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\\\\g<Plate_DAPI>_\\\\g<Well_DAPI>_\\\\g<Compound>.csv
    Use the object name for the file name?:No
